PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = MGSblock3-js2
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        totalTrials=0;
        sets=[[ -22,-2 ,7   , 13 ,   -11],[24 ,  -25  ,  -4 , 12  ,  6],[15 ,  -18 , 29 ,   3 ,  -30],[17  ,   0   , -22   , -10  ,  7],[0  ,   9 , -19 ,  -12  ,  28 ]];
        colors=[[-1,1,-1],[1,-1,-1],[-1,-1,1],[1,-1,1],[1,1,-1]];
        op2=0
        op3=0
        op4=0
        theset=[];

        time2=0;
        time3=0;
        time4=0;
        time5=0;
      Begin Routine:
        # Pick Parameters
        sets=[[ -22,-2 ,7   , 13 ,   -11],[24 ,  -25  ,  -4 , 12  ,  6],[15 ,  -18 , 29 ,   3 ,  -30],[17  ,   0   , -22   , -10  ,  7],[0  ,   9 , -19 ,  -12  ,  28 ]];

        baseloc=999;
        pickset=999;
        baseloc=randint(0,360);
        pickset=randint(0,4)
        theset=[];
        theset=sets[pickset];

        document.body.style.cursor='none';


        #Set Visual features

        time2=0;
        time3=0;
        time4=0;
        time5=0;

        radius=.25;
        pos1x=0;
        pos1y=0;
        pos2x=0;
        pos2y=0;
        pos3x=0;
        pos3y=0;
        pos4x=0;
        pos4y=0;
        pos5x=0;
        pos5y=0;


        #Set the visibility of other points to 0 if not used


        theset[0]=theset[0]+baseloc;
        theset[1]=theset[1]+baseloc;
        theset[2]=theset[2]+baseloc;
        theset[3]=theset[3]+baseloc;
        theset[4]=theset[4]+baseloc;
        pi=3.14;

        #pull out the correct number of points and sort

        theset=theset[0:pts];

        sorted=[]
        looptimes=pts;
        storeset=[];
        storeset=theset;
        storesetStart=[];
        storesetEnd=[];
        smallest=0;
        smallind=0;
        while looptimes>0:
            smallest=storeset[0];
            smallind=0;
            for j in range(0,looptimes):
                if smallest>storeset[j]:
                    smallind=j;
                    smallest=storeset[j];
            sorted.push(smallest)
            if smallind==0:
                storeset=storeset[1:looptimes];
            elif smallind==looptimes:
                storeset=storeset[0:looptimes-1];
            else:
                storesetStart=storeset[0:smallind];
                storesetEnd=storeset[smallind+1:looptimes];
                storeset=[].concat(storesetStart,storesetEnd);
            looptimes=looptimes-1;
        theset=sorted;



        #Assign possition
        if pts==1:
            pos1x=radius*Math.cos(theset[0]*pi/180);
            pos1y=radius*Math.sin(theset[0]*pi/180);
            op2=0
            op3=0
            op4=0
            psychoJS.experiment.addData('Targ1',theset[0])
            psychoJS.experiment.addData('Targ2',999)
            psychoJS.experiment.addData('Targ3',999)
            psychoJS.experiment.addData('Targ4',999)
            psychoJS.experiment.addData('Targ5',999)
        elif pts==2:
            pos1x=radius*Math.cos(theset[0]*pi/180);
            pos1y=radius*Math.sin(theset[0]*pi/180);
            pos2x=radius*Math.cos(theset[1]*pi/180);
            pos2y=radius*Math.sin(theset[1]*pi/180);
            op2=1;
            op3=0;
            op4=0;
            time2=thedelay/2;
            psychoJS.experiment.addData('Targ1',theset[0])
            psychoJS.experiment.addData('Targ2',theset[1])
            psychoJS.experiment.addData('Targ3',999)
            psychoJS.experiment.addData('Targ4',999)
            psychoJS.experiment.addData('Targ5',999)
        elif pts==3:
            pos1x=radius*Math.cos(theset[0]*pi/180);
            pos1y=radius*Math.sin(theset[0]*pi/180);
            pos2x=radius*Math.cos(theset[1]*pi/180);
            pos2y=radius*Math.sin(theset[1]*pi/180);
            pos3x=radius*Math.cos(theset[2]*pi/180);
            pos3y=radius*Math.sin(theset[2]*pi/180);
            op2=1;
            op3=1;
            op4=0;
            time3=thedelay/2;
            time2=0;
            psychoJS.experiment.addData('Targ1',theset[0])
            psychoJS.experiment.addData('Targ2',theset[1])
            psychoJS.experiment.addData('Targ3',theset[2])
            psychoJS.experiment.addData('Targ4',999)
            psychoJS.experiment.addData('Targ5',999)
        else:
            pos1x=radius*Math.cos(theset[0]*pi/180);
            pos1y=radius*Math.sin(theset[0]*pi/180);
            pos2x=radius*Math.cos(theset[1]*pi/180);
            pos2y=radius*Math.sin(theset[1]*pi/180);
            pos3x=radius*Math.cos(theset[2]*pi/180);
            pos3y=radius*Math.sin(theset[2]*pi/180);
            pos4x=radius*Math.cos(theset[3]*pi/180);
            pos4y=radius*Math.sin(theset[3]*pi/180);
            pos5x=radius*Math.cos(theset[4]*pi/180);
            pos5y=radius*Math.sin(theset[4]*pi/180);
            psychoJS.experiment.addData('Targ1',theset[0])
            psychoJS.experiment.addData('Targ2',theset[1])
            psychoJS.experiment.addData('Targ3',theset[2])
            psychoJS.experiment.addData('Targ4',theset[3])
            psychoJS.experiment.addData('Targ5',theset[4])
            op2=1;
            op3=1;
            op4=1;
            time5=thedelay/2;
            time3=0;
            time4=0;
            time2=0;

        resppos= mouse.getPos()
      End Routine:
        corr=999;
        posCorrx=0;
        posCorry=0;
        totalmean=0;
        corrLineCol=0;
        ubercorr=0;
        RespType=randint(0,1);
        RespType=1;


        if RespType==2:
            corrCol=[1,1,1];
            corr=6;
            #Find the mean;
            for j in range(0,pts):
                totalmean=totalmean+theset[j]
            totalmean=totalmean/pts;
            corrLineCol=[1,1,1];
            ubercorr=totalmean;
        else:
            corr=randint(0,pts-1);
            corrCol=colors[corr];
            corrLineCol=[-1,-1,-1];
            ubercorr=theset[corr];

        psychoJS.experiment.addData('base',baseloc)
        psychoJS.experiment.addData('whichset',pickset)
        psychoJS.experiment.addData('Corr',corr)

        posCorrx=radius*Math.cos(ubercorr*pi/180);
        posCorry=radius*Math.sin(ubercorr*pi/180);
        psychoJS.experiment.addData('CorrTarg',ubercorr)
        psychoJS.experiment.addData('exptType',1)
        psychoJS.experiment.addData('tempDelay',1)
    PolygonComponent Anulus
      fillColor = $[0,0,0]
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (.5, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thedelay+.8
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    PolygonComponent Fixation
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.01,.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thedelay+.8
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    PolygonComponent Targ1
      fillColor = $[-1,1,-1]
      lineColor = $[-1,1,-1]
      nVertices = 100
      pos [set every repeat] = $[pos1x,pos1y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = .5
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    PolygonComponent Targ2
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 100
      opacity [set every repeat] = $op2
      pos [set every repeat] = $[pos2x,pos2y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = $time2+.25
      stopVal [duration (s)] = .5
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    PolygonComponent Targ3
      fillColor = $[-1,-1,1]
      lineColor = $[-1,-1,1]
      nVertices = 100
      opacity [set every repeat] = $op3
      pos [set every repeat] = $[pos3x,pos3y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = $time3+0.25
      stopVal [duration (s)] = .5
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    PolygonComponent Targ4
      fillColor = $[1,-1,1]
      lineColor = $[1,-1,1]
      nVertices = 100
      opacity [set every repeat] = $op4
      pos [set every repeat] = $[pos4x,pos4y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = $time4+.25
      stopVal [duration (s)] = .5
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    PolygonComponent Targ5
      fillColor = $[1,1,-1]
      lineColor = $[1,1,-1]
      nVertices = 100
      opacity [set every repeat] = $op4
      pos [set every repeat] = $[pos5x,pos5y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = time5+.25
      stopVal [duration (s)] = .5
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    TextComponent counter
      letterHeight = .03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thedelay+.8
      text [set every repeat] = $totalTrials
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    TextComponent total
      letterHeight = .03
      pos = (.06, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thedelay+.8
      text [set every repeat] = $trials.nTotal
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    TextComponent slash
      letterHeight = 0.03
      pos = (.03, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thedelay+.8
      text = /
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  Routine StartTrial
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        document.body.style.cursor='auto';
    PolygonComponent fixstart
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent fixstart1
      fillColor = $[1,1,1]
      nVertices = 100
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = fixstart1
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent counterstart
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $totalTrials
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    TextComponent slashstart
      letterHeight = 0.03
      pos = (.03, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = /
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    TextComponent totalstart
      letterHeight = 0.03
      pos = (.06, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trials.nTotal
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  Routine Respond
    PolygonComponent anulus
      fillColor = $[0,0,0]
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent fixation
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.01, .01)
      startVal [time (s)] = 0.0
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    PolygonComponent InnerRing
      fillColor = $[1,1,1]
      nVertices = 100
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (.48,.48)
      startVal [time (s)] = 0.0
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    PolygonComponent OuterRing
      fillColor = $[1,1,1]
      nVertices = 100
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = [.52,.52]
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        respPosx=0;
        respPosy=0;
      Begin Routine:
        respPosx=0;
        respPosy=0;
        response.setPos([respPosx,respPosy]);
      Each Frame:
        respPosx=mouse.getPos()[0];
        respPosy=mouse.getPos()[1];

        if OuterRing.contains(mouse) & (~InnerRing.contains(mouse)):
            if mouse.getPressed()[0]==1:
               respPosx=mouse.getPos()[0];
               respPosy=mouse.getPos()[1];
               guess=Math.atan2(respPosy,respPosx)*180/3.14;
               continueRoutine = False;
      End Routine:
        if guess<0:
            guess=guess+360;
        elif guess>360:
            guess=guess-360;
        psychoJS.experiment.addData('guess', guess);
        corrCol=corrCol;
    PolygonComponent response
      fillColor [set every repeat] = $corrCol
      lineColor [set every repeat] = $corrLineCol
      nVertices = 100
      pos [set every frame] = $[respPosx,respPosy]
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    TextComponent counter2
      letterHeight = .03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $totalTrials
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    TextComponent total2
      letterHeight = .03
      pos = (.06, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trials.nTotal
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    TextComponent text_2
      letterHeight = 0.03
      pos = (.03, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = /
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  Routine Feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        corrCol=corrCol;

        document.body.style.cursor='none';
        howgood=[0,0,0];
        err=Math.min(Math.abs(guess-ubercorr),Math.abs(guess-ubercorr-360));
        err=Math.min(err,Math.abs(guess-ubercorr+360));
        psychoJS.experiment.addData('err', err);

        if err<7.5:
            howgood=[-1,1,-1];
        elif err<15:
            howgood=[1,1,-1];
        else:
            howgood=[1,-1,-1];
      End Routine:
        respPosx=0;
        respPosy=0;
        totalTrials=totalTrials+1;
    CodeComponent Arc
      Code Type = Auto->JS
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      Begin Experiment:
        win=0;
        win=psychoJS.window;
        green= util.Color([-1, 1, -1]);
        ProgVertices=[[.25,0],[.2501,0]];
        Test1=visual.ShapeStim(win=win, name='Test1', lineWidth=20, shapeFlineColor = green, lineColorSpace='rgb', fillColor=green, fillColorSpace='rgb', vertices = ProgVertices, pos = [0,0], closeShape=False, autoDraw = True)
      Begin Routine:
        smallest=Math.min(guess,ubercorr);
        largest=Math.max(guess,ubercorr);
        if (largest-smallest)>180:
           startang=largest-360;
           endang=smallest;
        else:
            startang=smallest;
            endang=largest;



        verts=[];
        newvert=0;
        radius2=radius+.07
        for i in range(startang,endang,.2):
            newvert=[radius2*Math.cos(i*3.14/180), radius2*Math.sin(i*3.14/180)];
            verts.push(newvert);


        grey= util.Color([0, 0, 0]);
        a=1; #you can use a var in the util.color to change it!
        Test1.setFillColor(util.Color([0, 0, 0]));
        Test1.setLineColor(util.Color(howgood));
        Test1.setVertices(verts);
        Test1.setAutoDraw(True)
      End Routine:
        Test1.setAutoDraw(False)
    PolygonComponent fixy
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.01, .01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    PolygonComponent anul
      fillColor = $[0,0,0]
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (.5, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    PolygonComponent trueans
      fillColor [set every repeat] = $howgood
      lineColor [set every repeat] = $howgood
      lineWidth = 2
      nVertices = 100
      ori [set every repeat] = $ubercorr
      pos [set every repeat] = $[posCorrx,posCorry]
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    PolygonComponent yourans
      fillColor [set every repeat] = $corrCol
      lineColor [set every repeat] = $corrLineCol
      nVertices = 100
      pos [set every repeat] = $(respPosx, respPosy)
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    TextComponent counter3
      letterHeight = .03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $totalTrials
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    TextComponent slash3
      letterHeight = 0.03
      pos = (.03, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text = /
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    TextComponent tots3
      letterHeight = .03
      pos = (.06, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $trials.nTotal
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  Routine Inst1
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    PolygonComponent demoring1
      fillColor = $[0,0,0]
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent demofix1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    TextComponent demoWhatLike
      letterHeight = 0.03
      pos = (0, .35)
      startVal [time (s)] = 0.0
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      text:
        Each trial will begin looking
        like this:
         Please maintain fixation
        on the cross when not responding
        (or reading instructions)
  Routine Inst
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        RespType=0;
        totalTrials=1;
        document.body.style.cursor='none';
        radius=.25;
        democols=[];
        demoset=[ -22,-2 ,7   , 13 ,   -11];
        democols=[[-1,1,-1],[1,-1,-1],[-1,-1,1],[1,-1,1],[1,1,-1]];

        #Sort the set
        sorted=[]
        looptimes=5;
        storeset=[];
        storeset=demoset;
        storesetStart=[];
        storesetEnd=[];
        smallest=0;
        smallind=0;
        while looptimes>0:
            smallest=storeset[0];
            smallind=0;
            for j in range(0,looptimes):
                if smallest>storeset[j]:
                    smallind=j;
                    smallest=storeset[j];
            sorted.push(smallest)
            if smallind==0:
                storeset=storeset[1:looptimes];
            elif smallind==looptimes:
                storeset=storeset[0:looptimes-1];
            else:
                storesetStart=storeset[0:smallind];
                storesetEnd=storeset[smallind+1:looptimes];
                storeset=storesetStart;
                storeset.push(storesetEnd);
            looptimes=looptimes-1;
        pi=3.14
        demoset=sorted;
      Begin Routine:
        RespType=0;
        totalTrials=1;
        document.body.style.cursor='none';

        pi=3.14
        pos1x=radius*Math.cos(demoset[0]*pi/180);
        pos1y=radius*Math.sin(demoset[0]*pi/180);
        pos2x=radius*Math.cos(demoset[1]*pi/180);
        pos2y=radius*Math.sin(demoset[1]*pi/180);
        pos3x=radius*Math.cos(demoset[2]*pi/180);
        pos3y=radius*Math.sin(demoset[2]*pi/180);
        pos4x=radius*Math.cos(demoset[3]*pi/180);
        pos4y=radius*Math.sin(demoset[3]*pi/180);
        pos5x=radius*Math.cos(demoset[4]*pi/180);
        pos5y=radius*Math.sin(demoset[4]*pi/180);
    TextComponent instructions
      letterHeight = .1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Instructions:
    TextComponent spaceinst
      letterHeight = .03
      pos = (0, .35)
      saveStartStop = False
      startVal [time (s)] = 1.5
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      text:
        Please press SPACE
        to advance through Instructions
        (2 second minimum wait)
  Routine Inst2
    PolygonComponent annul2
      fillColor = $[0,0,0]
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent fix2
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent demoOrdering
      letterHeight = 0.03
      pos = (0, .35)
      startVal [time (s)] = 0.0
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      text:
        There will alway be a Green target
        Any remaining targets
        will, from clockwise to CCW
        be Red, Blue, Magenta, then Yellow
    PolygonComponent fake1s
      fillColor [set every repeat] = $democols[0]
      lineColor [set every repeat] = $democols[0]
      nVertices = 100
      pos [set every repeat] = $[pos1x,pos1y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    PolygonComponent fake2s
      fillColor [set every repeat] = $democols[1]
      lineColor [set every repeat] = $democols[1]
      nVertices = 100
      pos [set every repeat] = $[pos2x,pos2y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    PolygonComponent fake3s
      fillColor = $democols[2]
      lineColor = $democols[2]
      nVertices = 100
      pos [set every repeat] = $[pos3x,pos3y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    PolygonComponent fake4s
      fillColor [set every repeat] = $democols[3]
      lineColor [set every repeat] = $democols[3]
      nVertices = 100
      pos [set every repeat] = $[pos4x,pos4y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    PolygonComponent fake5s
      fillColor = $democols[4]
      lineColor = $democols[4]
      nVertices = 100
      pos [set every repeat] = $[pos5x,pos5y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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  Routine Inst3
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    PolygonComponent annul3
      fillColor = $[0,0,0]
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent fix3
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    TextComponent demodelay
      letterHeight = 0.03
      pos = (0, .35)
      startVal [time (s)] = 0.0
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      text:
        There will be a
        delay of 1 or 6 seconds
  Routine Inst4
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent demoStartResp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        At the end of the delay, a
        colored circle will apear
        over the fixation:
  Routine Inst5
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent demohowmove
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please use the mouse
        to move the circle to the location on the ring
        where you remember the matching color target
  Routine Inst6
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent demoFB
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        To lock in your response
        simply left click

        You will then recive feedback
        showing your answer and the
        true location:
        Green=Good!, Yellow=Ok, Red=Try Harder

        Try to minimize the difference!
  Routine Inst7
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent text_3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        To start each trial
        click the cross

        Please DO NOT move the mouse
        until it is time to respond

        If you must exit early
        press ESC twice

        You may begin after pressing
        SPACE (waiting min 2 sec)
  Routine buffer
    CodeComponent returnmouse
      Code Type = Auto->JS
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      Begin Experiment:
        document.body.style.cursor='auto';
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you!
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  Routine Inst3_5
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent demolasttarg
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Halfway through the delay,
        a final target will apear for .5 seconds
  Routine InstClose
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent DemocloseOthers
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Before you begin, please close down
        other tabs/memory heavy apps

        If you need to do so, please press ESC
        once, close this tab, close the offending
        processes, and reopen the experiment

        This ensures that the experiment will
        run properly and your data will be valid
Flow
  Routine Inst
  Routine InstClose
  Routine Inst1
  Routine Inst2
  Routine Inst3
  Routine Inst3_5
  Routine Inst4
  Routine Inst5
  Routine Inst6
  Routine Inst7
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [OrderedDict([('pts', 2), ('thedelay', 1)]),
      OrderedDict([('pts', 2), ('thedelay', 6)]),
      OrderedDict([('pts', 5), ('thedelay', 1)]),
      OrderedDict([('pts', 5), ('thedelay', 6)])]
    Routine StartTrial
    Routine trial
    Routine Respond
    Routine Feedback
  LoopTerminator trials
  Routine buffer
